PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2048, 1280]
  color = $[1,1,1]
  expName = simple_RL
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Routines
  Routine trial
  Routine Welcome
    TextComponent textWelcome
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Welcome to the experiment

        CLICK to see the instructions
    MouseComponent mouseWelcome
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine feedback_msg
    CodeComponent feedback_code
      Code Type = Py
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      Begin Routine:
        if resp.clicked_name=='pic_left':
            msg0='+10'
            msgColor='green'

        if  resp.clicked_name=='pic_right':
            msg0='-10'
            msgColor='red'

        if not resp.clicked_name:
            msg0='No response detected'
            msgColor='black'
    TextComponent feedback_txt
      color [set every repeat] = $msgColor
      font = Calibri
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
      text [set every repeat] = $msg0
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  Routine Instruction1
    TextComponent textInstructions1
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        At each trial, you will see a scene, for example a mountain or a beach.

        After that you can catch a green ball or a red ball. Every scene belongs to a different ball. You can find out by the reward you receive at each trial.

        CLICK to continue
    MouseComponent mouseInstructions1
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Instruction2
    TextComponent textInstructions2
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        For example, if you get more rewards for catching a red ball when the mountain is shown, you know that the red ball belongs to the mountain scene. Always catch the same ball once you know where it belongs to.

        Please CLICK to continue with a training
    MouseComponent mouseInstructions2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine training
    ImageComponent pic_cue
      image [set every repeat] = $cue
      pos = (0, 0.1)
      size = (0.39, 0.5)
      startVal [time (s)] = 0
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    ImageComponent pic_left
      image [set every repeat] = $stim_left
      pos = (-0.2, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    ImageComponent pic_right
      image [set every repeat] = $stim_right
      pos = (0.2, -0.3)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
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    MouseComponent key
      clickable = pic_left, pic_right
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable = name
      startVal [time (s)] = 0
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  Routine trainingFeedback
    CodeComponent codeFeedback
      Code Type = Both
      Begin JS Routine:
        feedback_js = feedback.join(", ");
        correct_js = correct.join(", ");
        key.clicked_name_js = key.clicked_name.join(", ");
        key.clicked_name_js = "\""+ key.clicked_name_js +"\""


        if ((feedback_js === key.clicked_name_js)) {
            feedbackText = "Correct!";
            feedbackTextColor = "green";
        } else {
            feedbackText = "Wrong!";
            feedbackTextColor = "red";
        }


        if ((correct_js === key.clicked_name_js)) {
            key.corr = 1;
        } else {
            key.corr = 0;
        }

        psychoJS.experiment.addData("key.corr", key.corr);
        psychoJS.experiment.addData("feedback", feedback);
        psychoJS.experiment.addData("correct", correct);
      Begin Routine:
        print(feedback)
        print(correct)
        print(key.clicked_name)
        print(key.getPressed)

        if(feedback == key.clicked_name):
            feedbackText= "Correct!"
            feedbackTextColor="green"
        else:
           feedbackText= "Wrong!"
           feedbackTextColor="red"

        if(correct == key.clicked_name):
            key.corr= 1
        else:
            key.corr= 0

        print(key.corr)
        thisExp.addData("key.corr",key.corr)
    TextComponent textFeedback
      color [set every repeat] = $feedbackTextColor
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $feedbackText
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  Routine blank500
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Goodbye
    TextComponent textGoodbye
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for participating
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    MouseComponent mouseGoodbye
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  LoopInitiator loopTraining loopType="TrialHandler"
    conditionsFile = condition.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'cue': 'images/m1.jpg', 'stim_left': 'images/round.jpg', 'stim_right': 'images/squared.jpg', 'feedback': ['pic_left'], 'correct': ['pic_left'], 'is_valid': 'valid'},
      {'cue': 'images/m1.jpg', 'stim_left': 'images/squared.jpg', 'stim_right': 'images/round.jpg', 'feedback': ['pic_left'], 'correct': ['pic_right'], 'is_valid': 'invalid'},
      {'cue': 'images/m1.jpg', 'stim_left': 'images/round.jpg', 'stim_right': 'images/squared.jpg', 'feedback': ['pic_left'], 'correct': ['pic_left'], 'is_valid': 'valid'},
      {'cue': 'images/m1.jpg', 'stim_left': 'images/round.jpg', 'stim_right': 'images/squared.jpg', 'feedback': ['pic_left'], 'correct': ['pic_left'], 'is_valid': 'valid'},
      {'cue': 'images/m1.jpg', 'stim_left': 'images/squared.jpg', 'stim_right': 'images/round.jpg', 'feedback': ['pic_left'], 'correct': ['pic_right'], 'is_valid': 'invalid'},
      {'cue': 'images/m1.jpg', 'stim_left': 'images/round.jpg', 'stim_right': 'images/squared.jpg', 'feedback': ['pic_left'], 'correct': ['pic_left'], 'is_valid': 'valid'},
      {'cue': 'images/m1.jpg', 'stim_left': 'images/squared.jpg', 'stim_right': 'images/round.jpg', 'feedback': ['pic_right'], 'correct': ['pic_right'], 'is_valid': 'valid'},
      {'cue': 'images/m1.jpg', 'stim_left': 'images/round.jpg', 'stim_right': 'images/squared.jpg', 'feedback': ['pic_left'], 'correct': ['pic_left'], 'is_valid': 'valid'},
      {'cue': 'images/m1.jpg', 'stim_left': 'images/round.jpg', 'stim_right': 'images/squared.jpg', 'feedback': ['pic_left'], 'correct': ['pic_left'], 'is_valid': 'valid'}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
    Routine blank500
    Routine training
    Routine trainingFeedback
  LoopTerminator loopTraining
  Routine blank500
  Routine Goodbye
